CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:Nucleus_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Cilia_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:Centriole_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Nucleus_stain
    Name the output image:Nucleus_stainGaussian
    Sigma:1

GaussianFilter:[module_num:6|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
    Select the input image:Centriole_stain
    Name the output image:Centriole_stainGaussian
    Sigma:1

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Nucleus_stainGaussian
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Centriole_stainGaussian
    Name the primary objects to be identified:Centriole
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Cilia_stain
    Name the primary objects to be identified:Cilia
    Typical diameter of objects, in pixel units (Min,Max):7,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.001
    Upper outlier fraction:0.001
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nucleus_stain
    Name the output image:NucleusOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nucleus

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Centriole_stain
    Name the output image:CentrioleOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Centriole

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cilia_stain
    Name the output image:CiliaOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cilia

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleusOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleus_stain
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CentrioleOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Centriole_stain
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CiliaOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cilia_stain
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Centriole, Cilia, Nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cilia|AreaShape_BoundingBoxMinimum_X,Cilia|AreaShape_BoundingBoxMinimum_Y,Cilia|AreaShape_MinorAxisLength,Cilia|AreaShape_Center_Y,Cilia|AreaShape_Center_X,Cilia|AreaShape_BoundingBoxMaximum_Y,Cilia|AreaShape_BoundingBoxMaximum_X,Cilia|AreaShape_Solidity,Cilia|AreaShape_MedianRadius,Cilia|AreaShape_Area,Cilia|AreaShape_MeanRadius,Cilia|AreaShape_Extent,Cilia|AreaShape_Orientation,Cilia|AreaShape_EulerNumber,Cilia|AreaShape_BoundingBoxArea,Cilia|AreaShape_Compactness,Cilia|AreaShape_MinFeretDiameter,Cilia|AreaShape_MaximumRadius,Cilia|AreaShape_FormFactor,Cilia|AreaShape_MajorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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